PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1536, 864]
  expName = infant_attention
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine trial
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    ImageComponent background_image
      image = Trees.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent face_stim
      image [set every repeat] = $face
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent occluder_stim
      image [set every repeat] = $occluder
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        #Normalize the sound stream
        sound_stream = sound.Sound('sounds/Bah.wav')
      Begin Routine:
        # Load trial variables from Excel
        current_sequence = str(sequence)

        # Map A/B/C to their respective sound file paths
        sound_map = {}
        sound_map['A'] = str(sound_A)
        sound_map['B'] = str(sound_B)
        sound_map['C'] = str(sound_C)

        # Create two lists: one for sound objects, one for the corresponding labels
        files_to_play = []  # List of sound objects
        labels_to_play = []  # Corresponding label list for reference

        # Loop through sequence and create sound objects using psysound (safe import)
        for char in current_sequence:
            if char in sound_map:
                files_to_play.append(sound_map[char])
                labels_to_play.append(char)

        # Initialize control variables
        current_step = 0
        waiting_for_sound = True

        # Animation settings
        animation_phase = 0  # 0=waiting, 1=rising, 2=visible, 3=lowering
        animation_start_time = 0
        rise_duration = 1.0  # Time to rise up from behind occluder
        visible_duration = 0.5  # Time to stay visible
        lower_duration = 1.0  # Time to lower back behind occluder

        # Position parameters
        start_y = 0  # Starting position (behind occluder)
        peak_y = 0.25     # Peak position (visible above occluder)

        # Adjust sizes and initial positions
        face_stim.size = (0.22, 0.22)       # Size of face
        face_stim.pos = [0, start_y]      # Position face behind occluder
        occluder_stim.size = (0.23, 0.23) # Size of occluder
        occluder_stim.pos = [0, 0]     # Position of occluder

        space_held = False
        space_start_time = None

        # Set up keyboard state handler
        from pyglet.window import key
        keyboard_state = key.KeyStateHandler()
        win.winHandle.push_handlers(keyboard_state)
      Each Frame:
        # Escape
        if event.getKeys(['escape']):
            core.quit()

        # Check if space is currently pressed
        space_is_down = keyboard_state[key.SPACE]

        # Detect press
        if space_is_down and not space_held:
            space_held = True
            space_start_time = t
            print(f"Space pressed at {t}")

        # Detect release
        if not space_is_down and space_held:
            looking_time = t - space_start_time
            thisExp.addData('looking_time', looking_time)
            print(f"Looking time: {looking_time}s")
            continueRoutine = False

        # Play sounds and animate face based on current phase
        if current_step < len(files_to_play):

            # Phase 0: Waiting to start next sound/animation
            if animation_phase == 0:
                # Start the sound and begin rising animation
                sound_stream.setSound(files_to_play[current_step])
                sound_stream.play()
                print(f"Playing sound {current_step + 1}: {files_to_play[current_step]} (label: {labels_to_play[current_step]})")

                # Start rising animation
                animation_phase = 1
                animation_start_time = t

            # Phase 1: Face rising from behind occluder
            elif animation_phase == 1:
                # Calculate progress for rising (0-1)
                elapsed = t - animation_start_time
                progress = min(1.0, elapsed / rise_duration)

                # Apply easing for smoother animation
                eased_progress = progress * progress * (3 - 2 * progress)

                # Calculate and set face position
                current_y = start_y + eased_progress * (peak_y - start_y)
                face_stim.pos = [0, current_y]

                # Check if rising is complete
                if progress >= 1.0:
                    # Start visible phase
                    animation_phase = 2
                    animation_start_time = t

            # Phase 2: Face visible at peak position
            elif animation_phase == 2:
                # Keep face at peak position
                face_stim.pos = [0, peak_y]

                # Check if visible duration is complete
                elapsed = t - animation_start_time
                if elapsed >= visible_duration:
                    # Start lowering phase
                    animation_phase = 3
                    animation_start_time = t

            # Phase 3: Face lowering back behind occluder
            elif animation_phase == 3:
                # Calculate progress for lowering (0-1)
                elapsed = t - animation_start_time
                progress = min(1.0, elapsed / lower_duration)

                # Apply easing for smoother animation
                eased_progress = progress * progress * (3 - 2 * progress)

                # Calculate and set face position
                current_y = peak_y - eased_progress * (peak_y - start_y)
                face_stim.pos = [0, current_y]

                # Check if lowering is complete
                if progress >= 1.0:
                    # Animation complete, wait for sound to finish
                    face_stim.pos = [0, start_y]  # Keep face at lowest position

                    # Stay in phase 3 until sound finishes
                    if not sound_stream.isPlaying:
                        # Sound finished, move to next sound and reset animation
                        animation_phase = 0
                        current_step += 1
                        print(f"Sound playing: {sound_stream.isPlaying}, Animation phase: {animation_phase}, Current step: {current_step}")

        else:
            # No more sounds to play — end the trial
            continueRoutine = False
      End Routine:
        # Stop the reusable sound stream if it's still playing
        if sound_stream.isPlaying:
            sound_stream.stop()
  Routine attention_getter
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    ImageComponent background_image_attention_getter
      image = Trees.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    MovieComponent attention_getter_laugh
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie = baby video.mp4
      size = (0.28, 0.28)
      startVal [time (s)] = 0.0
      volume = 3
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    CodeComponent attention_getter_code
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        # Spacebar advances to trial
        if 'space' in keys:
            print("Space pressed in attention getter - continuing to trial")
            continueRoutine = False

        # Escape quits experiment
        if 'escape' in keys:
            print("Escape pressed - quitting experiment")
            core.quit()
  Routine instructions
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    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press SPACE to Begin
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    CodeComponent instructions_code
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        # Spacebar advances to next routine
        if 'space' in keys:
            print("Space pressed in instructions - continuing")
            continueRoutine = False

        # Escape quits experiment
        if 'escape' in keys:
            print("Escape pressed - quitting experiment")
            core.quit()
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sample conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial': 1, 'sequence': 'C,C,B,C,A,B,B,A,A,B,C,C,C,C,B,A,A,B,C,C,C,B,A,A,A,B,A,B,A,B', 'face': 'faces\\08F_HA_X.BMP', 'occluder': 'occluders\\Block20.png', 'sound_A': 'sounds\\Vee.wav', 'sound_B': 'sounds\\Woo.wav', 'sound_C': 'sounds\\Chah.wav'},
      {'trial': 2, 'sequence': 'C,B,B,C,C,B,B,B,C,C,B,C,C,B,B,C,C,B,C,B,B,B,C,B,C,C,A,A,A,C', 'face': 'faces\\06F_NE_O.BMP', 'occluder': 'occluders\\Block21.png', 'sound_A': 'sounds\\Yye.wav', 'sound_B': 'sounds\\Neh.wav', 'sound_C': 'sounds\\Gee.wav'},
      {'trial': 3, 'sequence': 'A,C,C,A,C,C,B,B,A,B,B,C,B,B,C,A,A,B,B,C,A,A,B,B,C,B,A,B,B,B', 'face': 'faces\\12F_NE_O.BMP', 'occluder': 'occluders\\Block27.png', 'sound_A': 'sounds\\Day.wav', 'sound_B': 'sounds\\Leh.wav', 'sound_C': 'sounds\\Pah.wav'},
      {'trial': 4, 'sequence': 'C,B,A,C,B,A,A,C,A,B,C,B,A,A,B,A,B,A,A,A,A,B,A,A,A,B,A,A,B,B', 'face': 'faces\\15F_HA_X.BMP', 'occluder': 'occluders\\Block3.png', 'sound_A': 'sounds\\Meh.wav', 'sound_B': 'sounds\\Koo.wav', 'sound_C': 'sounds\\Shay.wav'},
      {'trial': 5, 'sequence': 'C,C,C,C,A,C,C,A,C,C,C,B,C,C,C,A,A,A,C,C,A,C,A,B,A,A,A,B,B,B', 'face': 'faces\\01F_NE_O.BMP', 'occluder': 'occluders\\Block10.png', 'sound_A': 'sounds\\Sheh.wav', 'sound_B': 'sounds\\Pay.wav', 'sound_C': 'sounds\\Bah.wav'},
      {'trial': 6, 'sequence': 'A,B,A,B,A,B,A,B,A,B,A,B,C,A,B,A,B,C,C,C,C,C,C,C,C,C,C,C,C,C', 'face': 'faces\\19F_NE_O.BMP', 'occluder': 'occluders\\Block9.png', 'sound_A': 'sounds\\Zah.wav', 'sound_B': 'sounds\\Nay.wav', 'sound_C': 'sounds\\Vay.wav'}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
    Routine attention_getter
    Routine trial
  LoopTerminator trials
