PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2025.1
  Window size (pixels) = [2560, 1440]
  expName = social_predictability
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine trial
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    ImageComponent background_image
      image = Trees.jpg
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent face_stim
      image [set every repeat] = $face
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent occluder_stim
      image [set every repeat] = $occluder
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent trial_code
      Code Type = Py
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      Begin Experiment:
        current_sound = None

        space_down_state = [False]

        def _on_key_press(symbol, modifiers):
            from pyglet.window import key as pyglet_key
            if symbol == pyglet_key.SPACE:
                space_down_state[0] = True

        def _on_key_release(symbol, modifiers):
            from pyglet.window import key as pyglet_key
            if symbol == pyglet_key.SPACE:
                space_down_state[0] = False

        win.winHandle.push_handlers(on_key_press=_on_key_press, on_key_release=_on_key_release)

        # Cumulative counters — start at zero, accumulate across all trials
        cumulative_looking_time = 0
        cumulative_lookaway_time = 0
      Begin Routine:
        import time
        begin_routine_start = time.time()
        print(f"BEGIN ROUTINE START: {begin_routine_start:.3f}")


        print(f"Trial {trials.thisN +1} started")
        # Load trial variables from Excel
        current_sequence = str(sequence)

        # Map A/B/C to their respective sound file paths
        sound_map = {}
        sound_map['A'] = str(sound_A)
        sound_map['B'] = str(sound_B)
        sound_map['C'] = str(sound_C)

        files_to_play = []
        labels_to_play = []

        for char in current_sequence:
            if char in sound_map:
                files_to_play.append(sound_map[char])
                labels_to_play.append(char)



        # Initialize control variables
        current_step = 0
        waiting_for_sound = True

        # Animation settings
        animation_phase = 0  # 0=waiting, 1=rising, 2=visible, 3=lowering
        animation_start_time = 0
        rise_duration = 1.0
        visible_duration = 0.5
        lower_duration = 1.0
        sound_triggered = False

        # Position parameters
        start_y = 0
        peak_y = 0.25

        # Adjust sizes and initial positions
        face_stim.size = (0.22, 0.22)
        face_stim.pos = [0, start_y]
        occluder_stim.size = (0.23, 0.23)
        occluder_stim.pos = [0, 0]

        # Looking time tracking — reset each trial
        total_looking_time = 0
        total_lookaway_time = 0

        # If space already held from attention getter, looking started at t=0
        if space_down_state[0]:
            look_start_time = 0
            lookaway_start_time = None
            print("Baby is Looking")
        else:
            look_start_time = None
            lookaway_start_time = None

        print(f"BEGIN ROUTINE END: {time.time():.3f} (took {time.time() - begin_routine_start:.3f}s)")
      Each Frame:
        if frameN == 0:
            print(f"FIRST FRAME: {time.time():.3f}")

        # Escape
        if event.getKeys(['escape']):
            core.quit()

        space_is_down = space_down_state[0]

        # Detect look START (space pressed while tracking looking time)
        if space_is_down and look_start_time is None:
            look_start_time = t
            if lookaway_start_time is not None:
                total_lookaway_time += t - lookaway_start_time
                lookaway_start_time = None
            print(f"Looking started at t={t:.3f}s")

        # Detect look END (space released while tracking a lookaway)
        if not space_is_down and look_start_time is not None:
            total_looking_time += t - look_start_time
            look_start_time = None
            lookaway_start_time = t
            print(f"Looked for t={t:.3f}s")

        # 1 second of continuous lookaway → end trial
        if lookaway_start_time is not None and (t - lookaway_start_time) >= 1.0:
            termination_step = current_step + 1
            sequence_until_termination = ','.join(labels_to_play[:current_step + 1])
            print(f"Lookaway >= 1s — ending trial at step {termination_step}: {sequence_until_termination}")
            thisExp.addData('termination_step', termination_step)
            thisExp.addData('sequence_until_termination', sequence_until_termination)
            continueRoutine = False

        # Play sounds and animate face based on current phase
        if current_step < len(files_to_play):

            if animation_phase == 0:
                current_sound = sound.Sound(files_to_play[current_step])
                sound_triggered = False
                animation_phase = 1
                animation_start_time = t

            elif animation_phase == 1:
                elapsed = t - animation_start_time
                progress = min(1.0, elapsed / rise_duration)
                eased_progress = progress * progress * (3 - 2 * progress)
                current_y = start_y + eased_progress * (peak_y - start_y)
                face_stim.pos = [0, current_y]
                if not sound_triggered and current_y >= 0.1:   #<-- Change this number to change speed of animation
                    # (Higher number = more face visible before sound plays)
                    current_sound.play()
                    print(f"Playing sound {current_step + 1}: {files_to_play[current_step]} (label: {labels_to_play[current_step]})")
                    sound_triggered = True
                if progress >= 1.0:
                    animation_phase = 2
                    animation_start_time = t

            elif animation_phase == 2:
                face_stim.pos = [0, peak_y]
                elapsed = t - animation_start_time
                if elapsed >= visible_duration:
                    animation_phase = 3
                    animation_start_time = t

            elif animation_phase == 3:
                elapsed = t - animation_start_time
                progress = min(1.0, elapsed / lower_duration)
                eased_progress = progress * progress * (3 - 2 * progress)
                current_y = peak_y - eased_progress * (peak_y - start_y)
                face_stim.pos = [0, current_y]
                if progress >= 1.0:
                    face_stim.pos = [0, start_y]
                    sound_still_playing = current_sound is not None and current_sound.isPlaying
                    if not sound_still_playing:
                        animation_phase = 0
                        current_step += 1


        else:
            continueRoutine = False
      End Routine:
        # Finalize any in-progress look or lookaway episode
        if look_start_time is not None:
            total_looking_time += t - look_start_time
        if lookaway_start_time is not None:
            total_lookaway_time += t - lookaway_start_time

        # Per-trial data
        thisExp.addData('total_looking_time', round(total_looking_time, 3))
        thisExp.addData('total_lookaway_time', round(total_lookaway_time, 3))

        # Cumulative data (running total from first trial onward)
        cumulative_looking_time += total_looking_time
        cumulative_lookaway_time += total_lookaway_time
        thisExp.addData('cumulative_looking_time', round(cumulative_looking_time, 3))
        thisExp.addData('cumulative_lookaway_time', round(cumulative_lookaway_time, 3))

        # Stop current sound if still playing
        if current_sound is not None and current_sound.isPlaying:
            current_sound.stop()

        print(f"Trial {trials.thisN +1} ended")
  Routine attention_getter
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    ImageComponent background_image_attention_getter
      image = Trees.jpg
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
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    MovieComponent attention_getter_laugh
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie = baby video.mp4
      saveStartStop = False
      size = (0.28, 0.28)
      startVal [time (s)] = 0.0
      volume = 3
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    CodeComponent attention_getter_code
      Code Type = Py
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      Begin Routine:
        a_space_was_held_on_entry = space_down_state[0]
      Each Frame:
        keys = event.getKeys()

        # Holding space advances to trial — hold carries into trial automatically
        if a_space_was_held_on_entry and not space_down_state[0]:
            a_space_was_held_on_entry = False

        if not a_space_was_held_on_entry and space_down_state[0]:
            print("Space held in attention getter - continuing to trial")
            continueRoutine = False


        # Escape quits experiment
        if 'escape' in keys:
            print("Escape pressed - quitting experiment")
            core.quit()
  Routine instructions
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    TextComponent Instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press B to Begin
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    CodeComponent instructions_code
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        # Spacebar advances to next routine
        if 'b' in keys:
            continueRoutine = False

        # Escape quits experiment
        if 'escape' in keys:
            print("Escape pressed - quitting experiment")
            core.quit()
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sample conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial': 1, 'sequence': 'C,C,B,C,A,B,B,A,A,B,C,C,C,C,B,A,A,B,C,C,C,B,A,A,A,B,A,B,A,B', 'face': 'faces\\08F_HA_X.BMP', 'occluder': 'occluders\\Block20.png', 'sound_A': 'sounds\\Vee.wav', 'sound_B': 'sounds\\Woo.wav', 'sound_C': 'sounds\\Chah.wav'},
      {'trial': 2, 'sequence': 'C,B,B,C,C,B,B,B,C,C,B,C,C,B,B,C,C,B,C,B,B,B,C,B,C,C,A,A,A,C', 'face': 'faces\\06F_NE_O.BMP', 'occluder': 'occluders\\Block21.png', 'sound_A': 'sounds\\Yye.wav', 'sound_B': 'sounds\\Neh.wav', 'sound_C': 'sounds\\Gee.wav'},
      {'trial': 3, 'sequence': 'A,C,C,A,C,C,B,B,A,B,B,C,B,B,C,A,A,B,B,C,A,A,B,B,C,B,A,B,B,B', 'face': 'faces\\12F_NE_O.BMP', 'occluder': 'occluders\\Block27.png', 'sound_A': 'sounds\\Day.wav', 'sound_B': 'sounds\\Leh.wav', 'sound_C': 'sounds\\Pah.wav'},
      {'trial': 4, 'sequence': 'C,B,A,C,B,A,A,C,A,B,C,B,A,A,B,A,B,A,A,A,A,B,A,A,A,B,A,A,B,B', 'face': 'faces\\15F_HA_X.BMP', 'occluder': 'occluders\\Block3.png', 'sound_A': 'sounds\\Meh.wav', 'sound_B': 'sounds\\Koo.wav', 'sound_C': 'sounds\\Shay.wav'},
      {'trial': 5, 'sequence': 'C,C,C,C,A,C,C,A,C,C,C,B,C,C,C,A,A,A,C,C,A,C,A,B,A,A,A,B,B,B', 'face': 'faces\\01F_NE_O.BMP', 'occluder': 'occluders\\Block10.png', 'sound_A': 'sounds\\Sheh.wav', 'sound_B': 'sounds\\Pay.wav', 'sound_C': 'sounds\\Bah.wav'},
      {'trial': 6, 'sequence': 'A,B,A,B,A,B,A,B,A,B,A,B,C,A,B,A,B,C,C,C,C,C,C,C,C,C,C,C,C,C', 'face': 'faces\\19F_NE_O.BMP', 'occluder': 'occluders\\Block9.png', 'sound_A': 'sounds\\Zah.wav', 'sound_B': 'sounds\\Nay.wav', 'sound_C': 'sounds\\Vay.wav'}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
    Routine attention_getter
    Routine trial
  LoopTerminator trials
